/*----------------------------------------------------- 
 ChR2 in apical dendrites - distal, distance>600um
 ------------------------------------------------------*/

// --------------------------------------------------
//    Parameter Settings
// --------------------------------------------------
// ChRexp = 5e-2 //  ChR expression density   
// del_light = 650    // delay time before light ON
// t_on = 300  // ms
// t_off = 350
//n_pulses = 1
// tstop = 450
// pd = 10  // mW/mm2  light intensity

// v_init = -65

print "ChR_apic_distal600"
objref ChR_apic_d
//  Apical dendrites stimulation

proc ChR_in_apical_distal () {

 ChRexp = $1
 pd = $2         // 10 mW/mm^2
 del_light = $3  // 650 ms  delay time before light ON
 t_on = $4       // 300 ms  
 t_off = $5 
expdist = $6 
n_pulses = $7  

  ChR_apic_d = new List()
  ChR2apic_d=ChRexp  
  i=0

  print "ChR distribution [index, section, segment, area, gbar, distance]:"  
  
  for k=0,108 {
      L5PC.apic[k] {     
          for(x,0){
		if(distance(x)>600){
                  ChR_apic_d.append(new ChR(x))  
                  ChR_apic_d.o(i).gbar= ChR2apic_d*area(x) 
                  ChR_apic_d.o(i).Er=pd         
                  ChR_apic_d.o(i).delay=del_light
		  ChR_apic_d.o(i).pulsewidth=t_on        
                  ChR_apic_d.o(i).interpulse_interval=t_off      
                  ChR_apic_d.o(i).n_pulses=n_pulses                    

//print i, secname()," ", ChR_apic_d.o(i).get_loc, area(x), ChR_apic_d.o(i).gbar, distance(x)
//                  areatot  += area(x)           
//                  gbartot  += HaloR_apic.o(i).gbar 
                  i=i+1      
		 }
                }
              }
  }
print "Number of segments populated: ",i
}


