/* ----------------------------------------------------------------------------
 * stellate-garden.hoc
 * 2012-07-17, Christoph Schmidt-Hieber, University College London
 *
 * based on 070605c4.CNG.swc from:
 * D. L. Garden, P. D. Dodson, C. O'Donnell, M. D. White, M. F. Nolan
 * Tuning of synaptic integration in the medial entorhinal cortex to the 
 * organization of grid cell firing fields.
 * Neuron 60, 875 (2008).
 * NEURON hoc file generated from CVapp (NeuroMorpho.org version)
 * http://neuromorpho.org/neuroMorpho/neuron_info.jsp?neuron_name=070605c4
 * ----------------------------------------------------------------------------*/

// load gui or stdrun:
load_file("stdrun.hoc")
load_file("./nrn/share/genutils.hoc")
load_file("./nrn/share/fixnseg.hoc")

begintemplate stellate_garden

public init, topol, biophys
public connect2target
public soma, axon, dendrite
public somaloc, middendloc, dendlist
public Vrest
public gnabar

external geom_nseg_shared

objref sl, somaloc, middendloc, dendlist

proc init() {
    topol()
    biophys()
    geom_nseg()
}

create soma
create axon
create dendrite[88]

proc topol() {
    basic_shape()
    define_locs()
}

obfunc connect2target() {localobj nc //$o1 target point process, optional $o2 returned NetCon
    soma nc = new NetCon(&v(0), $o1)
    nc.threshold = 10
    if (numarg() == 2) { $o2 = nc } // for backward compatibility
    return nc
}

proc geom_nseg() {
    geom_nseg_shared()
}

proc biophys() {
    // initialize user-defined membrane parameters
    celsius=35

    global_ra=139.09 // internal resistivity in ohm-cm
    Cm=1.0           // specific membrane capacitance in uF/cm^2
    Rm=30000.0       // CSH, 2012-07-06: passive tau_m is ~ 30ms in Garden et al.
    rmsoma=Rm

    Vleak=-85.0            // leak reversal CSH, 2011-11-08: -72->-85 to reflect our V_rest
    // Vrest=-62.45           // resting potential
    Vrest=-62.59           // resting potential
    hblock=0               // amount of actual Ih blockade               
    maxfastq=9.8e-5         // units are S/cm2
    maxslowq=5.3e-5         // units are S/cm2
    minfastq=maxfastq         // units are S/cm2
    minslowq=maxslowq         // units are S/cm2

    print "Inserting passive membrane"
    forall {insert pas Ra=global_ra e_pas=Vleak}
    print "Inserting spines and setting spine scale values"
    forall { insert spines scale_spines=1.0 } /* Garden et al. don't seem to be correcting for spines */
    print "Initializing uniform passive membrane properties"
    Rm=rmsoma
    forall { g_pas=1/(Rm/scale_spines) cm=Cm*scale_spines Ra = global_ra }

    printf("Inserting sag conductance in all segments: %d percent blocked\n",hblock*100)
    forall { insert ih gfastbar_ih=0 gslowbar_ih=0}

    print "Initializing uniform sag conductance in all segments\n"
    forall { gfastbar_ih=maxfastq*scale_spines*(1-hblock) gslowbar_ih=maxslowq*scale_spines*(1-hblock)}

    gnabar=0.05             /* sodium conductance */
    gka = 0.036 // .036     /* A-type potassium density */
    gkdr = 0.036              /* delayed rectifier density */

    forall {
	insert nap  gbar_nap=0.0
        insert kdr  gkdrbar_kdr=0.5*gkdr*scale_spines
        insert kap  gkabar_kap=1.0*gka*scale_spines
    }
    
    na_soma = gnabar
    na_end = gnabar * 0.01
    na_halfdis = 50.0
    na_steep = 10.0
    soma distance()
    forall {
	dis=distance(0.5)
	na_point = na_end + (na_soma-na_end) / (1+exp((dis-na_halfdis)/na_steep))
	insert nax
	gbar_nax = na_point * scale_spines
    }

    soma {
        gbar_nax=1.00*gnabar
        gkdrbar_kdr=1.0*gkdr
        gkabar_kap=1.0*gka
    }

    axon { 
        gbar_nax=4.0*gnabar
        gkdrbar_kdr=4.0*gkdr
        gkabar_kap=4.0*gka
    }
    
    forall {
        ek = -78.0
        ena = 60.0
    }

    print "Active properties and channels initialized\n"
    access soma
}

proc define_locs() {
    soma     somaloc = new Location(0.5)
    dendlist = new List()

    dendrite[1]   dendlist.append(new Location(0.8))
    dendrite[25]    dendlist.append(new Location(0.8))

    dendrite[67] dendlist.append(new Location(0.8))
    dendrite[34]   dendlist.append(new Location(0.8))

    dendrite[66]   dendlist.append(new Location(0.8))
    dendrite[78]    dendlist.append(new Location(0.8))
    
    dendrite[45]     dendlist.append(new Location(0.8))
    dendrite[48]    dendlist.append(new Location(0.8))
    
    dendrite[58]   dendlist.append(new Location(0.8))
    dendrite[17]   dendlist.append(new Location(0.8))
    
    dendrite[8]  dendlist.append(new Location(0.8))
    dendrite[51]  dendlist.append(new Location(0.8))
    
    dendrite[46] dendlist.append(new Location(0.8))
    dendrite[74] dendlist.append(new Location(0.8))

    dendrite[73] dendlist.append(new Location(0.8))
    dendrite[49] dendlist.append(new Location(0.8))

    dendrite[18] dendlist.append(new Location(0.8))
    dendrite[20] dendlist.append(new Location(0.8))

    dendrite[57] dendlist.append(new Location(0.8))
    dendrite[6] dendlist.append(new Location(0.8))

    dendrite[23] dendlist.append(new Location(0.8))
    dendrite[26] dendlist.append(new Location(0.8))

    dendrite[31] dendlist.append(new Location(0.8))
    dendrite[37] dendlist.append(new Location(0.8))

    dendrite[65] dendlist.append(new Location(0.8))
    dendrite[80] dendlist.append(new Location(0.8))

    dendrite[79] dendlist.append(new Location(0.8))
    dendrite[43] dendlist.append(new Location(0.8))

    dendrite[59] dendlist.append(new Location(0.8))
    dendrite[12] dendlist.append(new Location(0.8))

    dendrite[13] dendlist.append(new Location(0.8))
    dendrite[9] dendlist.append(new Location(0.8))

    dendrite[16] middendloc = new Location(0.5)

}

proc basic_shape() {
    soma {
      pt3dclear()

    //  Single soma point of radius: 9.09933um at (-31.809,23.803,0,18.199) in original SWC. Assuming this meant a spherical soma of that radius.
    //  Creating cylindrical section along y axis centred at this point, extending 9.09933um in each direction.

      pt3dadd(-31.809,14.704,0,18.199) 
      pt3dadd(-31.809,32.903,0,18.199) 

    } // end of points list

    {soma connect dendrite[0](0), 0.5}

    dendrite[0] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-26.58,30.83,9.99,1.96) 
      pt3dadd(-24.24,33.03,9.99,1.96) 
      pt3dadd(-21.7,35.24,9.99,1.96) 
      pt3dadd(-20.02,36.59,9.99,1.96) 
      pt3dadd(-18,37.77,9.99,1.96) 
      pt3dadd(-17.33,40.15,9.99,1.96) 
      pt3dadd(-16.15,41.67,9.99,1.8) 
      pt3dadd(-14.81,43.54,14.98,1.8) 
      pt3dadd(-11.44,45.73,9.99,1.31) 
      pt3dadd(-9.59,46.93,9.99,1.31) 
      pt3dadd(-6.06,48.79,9.99,1.31) 
      pt3dadd(-5.21,50.14,9.99,1.31) 
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
    } // end of points list

    {dendrite[0] connect dendrite[1](0), 1}

    dendrite[1] {
      pt3dclear()
      pt3dadd(144.16,144.67,34.97,1.31) 
      pt3dadd(147.69,144.67,34.97,1.31) 
      pt3dadd(151.31,144.84,34.97,1.31) 
      pt3dadd(151.98,145.68,34.97,1.31) 
      pt3dadd(154.84,145.68,34.97,1.31) 
      pt3dadd(155.68,143.99,29.97,1.31) 
      pt3dadd(156.69,144.67,39.96,1.31) 
      pt3dadd(158.37,146.2,39.96,1.31) 
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
    } // end of points list

    {dendrite[0] connect dendrite[2](0), 1}

    dendrite[2] {
      pt3dclear()
      pt3dadd(144.16,144.67,34.97,1.31) 
      pt3dadd(145.92,149.93,34.97,0.98) 
      pt3dadd(147.09,152.8,34.97,0.98) 
      pt3dadd(148.78,155.34,24.97,1.14) 
      pt3dadd(152.99,160.08,19.98,1.14) 
      pt3dadd(156.86,162.97,24.97,1.14) 
      pt3dadd(161.74,174.32,9.99,1.14) 
      pt3dadd(163.42,178.73,4.99,1.14) 
      pt3dadd(165.27,182.45,0,1.14) 
      pt3dadd(168.72,189.4,0,1.14) 
      pt3dadd(168.72,193.13,0,1.14) 
      pt3dadd(171.59,199.56,4.99,1.14) 
      pt3dadd(171.93,204.14,4.99,1.14) 
      pt3dadd(172.43,211.76,0,1.14) 
      pt3dadd(172.43,216.5,-9.99,1.14) 
      pt3dadd(173.35,222.77,-10.32,1.14) 
      pt3dadd(172.51,227,-15.32,1.14) 
      pt3dadd(175.38,232.76,-0.33,1.14) 
      pt3dadd(180.43,236.15,4.66,1.14) 
      pt3dadd(184.63,236.83,14.65,1.14) 
      pt3dadd(188.84,239.54,-5.33,1.14) 
      pt3dadd(190.86,241.24,-0.33,1.14) 

    } // end of points list

    {soma connect dendrite[3](0), 0.5}

    dendrite[3] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-23.39,25.06,0,0.16) 
      pt3dadd(-20.36,24.72,0,0.16) 
      pt3dadd(-19.35,25.06,0,1.47) 
      pt3dadd(-18.51,25.4,0,1.47) 
      pt3dadd(-18,25.74,0,1.47) 
      pt3dadd(-17.33,26.42,0,1.47) 
      pt3dadd(-16.83,26.58,0,1.14) 
      pt3dadd(-16.33,26.58,0,1.14) 
      pt3dadd(-15.82,26.58,0,1.14) 
      pt3dadd(-15.48,26.76,0,1.14) 
      pt3dadd(-14.47,26.58,0,1.47) 
      pt3dadd(-13.63,26.24,0,1.47) 
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
    } // end of points list

    {dendrite[3] connect dendrite[4](0), 1}

    dendrite[4] {
      pt3dclear()
      pt3dadd(49.9,23.88,-19.98,1.31) 
      pt3dadd(50.67,24.39,-24.64,1.14) 
      pt3dadd(51.5,24.72,-24.64,1.14) 
      pt3dadd(52.18,25.06,-24.64,1.14) 
      pt3dadd(53.52,25.74,-24.64,1.14) 
      pt3dadd(54.87,25.91,-24.64,1.14) 
      pt3dadd(56.38,26.58,-24.64,1.14) 
      pt3dadd(57.06,26.76,-24.64,1.14) 
      pt3dadd(57.9,27.77,-24.64,1.14) 
      pt3dadd(59.08,28.62,-24.64,1.14) 
      pt3dadd(59.92,28.79,-24.64,1.14) 

    } // end of points list

    {dendrite[4] connect dendrite[5](0), 1}

    dendrite[5] {
      pt3dclear()
      pt3dadd(59.92,28.79,-24.64,1.14) 
      pt3dadd(60.25,29.13,-24.31,1.14) 
      pt3dadd(60.42,29.97,-24.31,1.14) 
      pt3dadd(60.92,30.31,-24.31,1.14) 
      pt3dadd(61.43,30.83,-24.31,1.14) 
      pt3dadd(62.27,31.5,-24.31,1.14) 
      pt3dadd(62.78,32.18,-24.31,1.14) 
      pt3dadd(63.79,32.35,-24.31,1.14) 
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
    } // end of points list

    {dendrite[4] connect dendrite[6](0), 1}

    dendrite[6] {
      pt3dclear()
      pt3dadd(59.92,28.79,-24.64,1.14) 
      pt3dadd(61.77,28.62,-24.64,1.14) 
      pt3dadd(63.28,28.62,-24.64,1.14) 
      pt3dadd(64.29,28.62,-24.64,1.14) 
      pt3dadd(66.15,28.45,-24.64,1.14) 
      pt3dadd(67.5,28.45,-24.64,1.14) 
      pt3dadd(69.17,28.62,-24.64,1.14) 
      pt3dadd(71.03,28.62,-24.64,1.14) 
      pt3dadd(72.04,28.62,-24.64,1.14) 
      pt3dadd(72.88,28.28,-24.64,1.14) 
      pt3dadd(74.06,27.77,-24.64,1.14) 
      pt3dadd(76.42,27.77,-24.64,1.14) 
      pt3dadd(77.59,27.77,-24.64,1.14) 

    } // end of points list

    {dendrite[3] connect dendrite[7](0), 1}

    dendrite[7] {
      pt3dclear()
      pt3dadd(49.9,23.88,-19.98,1.31) 
      pt3dadd(51.76,22.86,-19.98,1.31) 
      pt3dadd(53.61,21.67,-19.98,1.31) 
      pt3dadd(54.62,20.15,-19.98,1.31) 
      pt3dadd(55.96,18.96,-19.98,1.31) 
      pt3dadd(57.81,18.12,-19.98,1.31) 
      pt3dadd(58.66,17.1,-19.98,1.31) 
      pt3dadd(59.49,16.42,-19.98,1.31) 
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
    } // end of points list

    {dendrite[7] connect dendrite[8](0), 1}

    dendrite[8] {
      pt3dclear()
      pt3dadd(75.99,-3.9,-29.97,1.14) 
      pt3dadd(76.84,-3.4,-29.64,0.98) 
      pt3dadd(77.34,-3.56,-29.64,0.98) 
      pt3dadd(78.35,-3.74,-29.64,0.98) 
      pt3dadd(79.19,-4.08,-29.64,1.31) 
      pt3dadd(80.88,-4.75,-29.64,1.31) 
      pt3dadd(83.4,-6.11,-29.64,1.31) 
      pt3dadd(85.24,-6.45,-29.64,1.31) 
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
    } // end of points list

    {dendrite[7] connect dendrite[9](0), 1}

    dendrite[9] {
      pt3dclear()
      pt3dadd(75.99,-3.9,-29.97,1.14) 
      pt3dadd(76.58,-4.92,-34.63,1.14) 
      pt3dadd(76.58,-6.61,-34.63,1.14) 
      pt3dadd(77.43,-7.97,-34.63,1.14) 
      pt3dadd(77.59,-8.82,-34.63,1.14) 
      pt3dadd(77.59,-10,-34.63,1.14) 
      pt3dadd(77.75,-11.53,-34.63,1.14) 
      pt3dadd(77.93,-12.89,-34.63,1.14) 
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
    } // end of points list

    {soma connect dendrite[10](0), 0.5}

    basic_shape2()
}

proc basic_shape2() {
    dendrite[10] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-23.99,29.98,0.33,1.47) 
      pt3dadd(-23.65,30.32,0.33,1.47) 
      pt3dadd(-23.14,30.83,0.33,1.47) 
      pt3dadd(-22.8,31.51,0.33,1.47) 
      pt3dadd(-22.13,31.85,0.33,1.47) 
      pt3dadd(-21.47,32.53,0.33,1.47) 
      pt3dadd(-20.62,32.53,0.33,1.47)
      pt3dadd(-18.77,32.53,0.33,1.47) 
      pt3dadd(-17.93,32.19,0.33,1.47) 
      pt3dadd(-16.91,32.53,0.33,1.47) 
      pt3dadd(-15.57,32.87,0.33,1.47) 
      pt3dadd(-15.23,33.37,0.33,1.47) 
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
    } // end of points list

    {dendrite[10] connect dendrite[11](0), 1}

    dendrite[11] {
      pt3dclear()
      pt3dadd(20.11,32.87,-24.64,1.31) 
      pt3dadd(20.87,32.69,-24.31,1.14) 
      pt3dadd(21.54,32.35,-24.31,1.14) 
      pt3dadd(22.38,31.67,-24.31,1.14) 
      pt3dadd(23.39,31,-24.31,1.14) 
      pt3dadd(24.57,30.32,-24.31,1.14) 
      pt3dadd(25.41,29.14,-24.31,1.14) 
      pt3dadd(26.08,28.46,-24.31,1.14) 
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
    } // end of points list

    {dendrite[11] connect dendrite[12](0), 1}

    dendrite[12] {
      pt3dclear()
      pt3dadd(70.51,-38.46,-23.98,1.14) 
      pt3dadd(70.6,-39.14,-28.97,0.98) 
      pt3dadd(71.28,-39.81,-28.97,0.98) 
      pt3dadd(71.78,-41.17,-28.97,0.98) 
      pt3dadd(72.45,-42.19,-28.97,0.98) 
      pt3dadd(73.29,-43.54,-28.97,0.98) 
      pt3dadd(73.46,-45.4,-28.97,0.98) 
      pt3dadd(73.8,-47.44,-28.97,0.98) 
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
    } // end of points list

    {dendrite[11] connect dendrite[13](0), 1}

    dendrite[13] {
      pt3dclear()
      pt3dadd(70.51,-38.46,-23.98,1.14) 
      pt3dadd(72.03,-38.8,-23.98,1.14) 
      pt3dadd(73.04,-39.3,-23.98,1.14) 
      pt3dadd(74.73,-39.47,-23.98,1.14) 
      pt3dadd(76.24,-40.32,-23.98,1.14) 
      pt3dadd(77.92,-41,-23.98,1.14) 
      pt3dadd(79.6,-41.51,-23.98,1.14) 
      pt3dadd(81.29,-42.35,-23.98,1.14) 
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
    } // end of points list

    {dendrite[10] connect dendrite[14](0), 1}

    dendrite[14] {
      pt3dclear()
      pt3dadd(20.11,32.87,-24.64,1.31) 
      pt3dadd(21.29,33.37,-24.64,1.14) 
      pt3dadd(21.96,34.56,-24.64,1.14) 
      pt3dadd(22.63,35.92,-24.64,1.14) 
      pt3dadd(23.47,36.76,-24.64,1.14) 
      pt3dadd(24.14,37.78,-24.64,1.14) 
      pt3dadd(24.82,38.79,-24.64,1.14) 
      pt3dadd(25.16,39.63,-29.64,1.14) 
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
    } // end of points list

    {soma connect dendrite[15](0), 0.5}

    dendrite[15] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-22.72,25.05,15.32,1.8) 
      pt3dadd(-21.37,25.22,15.32,1.8) 
      pt3dadd(-19.35,24.54,15.32,1.8) 
      pt3dadd(-17.66,23.7,15.32,1.8) 
      pt3dadd(-16.33,23.03,15.32,1.8) 
      pt3dadd(-14.47,21.84,15.32,1.8) 
      pt3dadd(-13.12,20.99,15.32,1.8) 
      pt3dadd(-11.95,19.98,15.32,1.8) 
      pt3dadd(-10.6,19.3,15.32,1.63) 
      pt3dadd(-9.75,18.62,15.32,1.63) 
      pt3dadd(-8.74,17.94,15.32,1.63) 
      pt3dadd(-8.08,17.1,15.32,1.63) 
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
    } // end of points list

    {dendrite[15] connect dendrite[16](0), 1}

    dendrite[16] {
      pt3dclear()
      pt3dadd(7.08,6.59,20.31,1.47) 
      pt3dadd(7.16,5.75,20.31,1.31) 
      pt3dadd(7.32,5.07,20.31,1.31) 
      pt3dadd(7.66,4.06,20.31,1.31) 
      pt3dadd(8.33,2.87,20.31,1.31) 
      pt3dadd(9.34,1.85,20.31,1.31) 
      pt3dadd(10.86,0.33,20.31,1.31) 
      pt3dadd(11.36,-0.51,20.31,1.31) 
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
    } // end of points list

    {dendrite[16] connect dendrite[17](0), 1}

    basic_shape3()
}

proc basic_shape3() {
    dendrite[17] {
      pt3dclear()
      pt3dadd(111.67,-76.92,50.62,1.31) 
      pt3dadd(111.92,-77.1,50.62,1.31) 
      pt3dadd(114.44,-78.28,50.62,1.31) 
      pt3dadd(115.97,-78.96,50.62,1.31) 
      pt3dadd(117.48,-79.8,50.62,1.31) 
      pt3dadd(118.32,-80.99,50.62,1.31) 
      pt3dadd(119.83,-82.01,50.62,1.31) 
      pt3dadd(121.52,-83.02,50.62,1.31) 
      pt3dadd(123.03,-84.38,50.62,1.31) 
      pt3dadd(124.38,-85.73,50.62,1.31) 
      pt3dadd(125.9,-86.75,50.62,1.31) 
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
    } // end of points list

    {dendrite[16] connect dendrite[18](0), 1}

    dendrite[18] {
      pt3dclear()
      pt3dadd(111.67,-76.92,50.62,1.31) 
      pt3dadd(113.19,-78.44,50.62,1.31) 
      pt3dadd(114.03,-79.63,50.62,1.31) 
      pt3dadd(114.87,-80.81,50.62,1.31) 
      pt3dadd(115.88,-82.68,50.62,1.31) 
      pt3dadd(116.38,-83.86,50.62,1.31) 
      pt3dadd(117.06,-85.73,50.62,1.31) 
      pt3dadd(117.39,-86.92,50.62,1.31) 
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
    } // end of points list

    {dendrite[15] connect dendrite[19](0), 1}

    dendrite[19] {
      pt3dclear()
      pt3dadd(7.08,6.59,20.31,1.47) 
      pt3dadd(8.42,5.58,20.31,1.47) 
      pt3dadd(9.09,5.07,20.31,1.47) 
      pt3dadd(10.77,4.73,20.31,1.47) 
      pt3dadd(11.95,4.06,20.31,1.47) 
      pt3dadd(13.98,3.38,20.31,1.47) 
      pt3dadd(15.15,2.19,20.31,1.47) 
      pt3dadd(16.41,1.17,35.63,1.31) 
      pt3dadd(16.79,1.54,26.37,1.31) 

    } // end of points list

    {dendrite[19] connect dendrite[20](0), 1}

    dendrite[20] {
      pt3dclear()
      pt3dadd(16.79,1.54,26.37,1.31) 
      pt3dadd(17.55,0.54,26.37,1.14) 
      pt3dadd(18.22,-0.64,26.37,1.14) 
      pt3dadd(19.07,-0.81,29.67,1.14) 
      pt3dadd(20.07,-0.81,29.67,1.14) 
      pt3dadd(21.59,-1.32,29.67,1.14) 
      pt3dadd(23.44,-2.15,29.67,1.14) 
      pt3dadd(24.96,-3.5,29.67,1.14) 
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
    } // end of points list

    {dendrite[19] connect dendrite[21](0), 1}

    dendrite[21] {
      pt3dclear()
      pt3dadd(16.79,1.54,26.37,1.31) 
      pt3dadd(18.14,1.38,26.37,1.14) 
      pt3dadd(19.32,1.04,26.37,1.14) 
      pt3dadd(20.33,0.37,26.37,1.14) 
      pt3dadd(21.85,0.03,26.37,1.14) 
      pt3dadd(23.36,-0.13,26.37,1.14) 
      pt3dadd(24.19,-0.64,29.67,1.14) 
      pt3dadd(25.71,-1.32,29.67,1.14) 
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
    } // end of points list

    {soma connect dendrite[22](0), 0.5}

    dendrite[22] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-34.17,32.15,0,0.16) 
      pt3dadd(-34.5,34,0,1.31) 
      pt3dadd(-34.83,35.01,0,1.31) 
      pt3dadd(-35.01,35.84,0,1.31) 
      pt3dadd(-35.01,36.52,0,1.31) 
      pt3dadd(-35.17,37.36,0,1.31) 
      pt3dadd(-35.34,38.2,0,1.31) 
      pt3dadd(-36.02,39.21,0,1.14) 
      pt3dadd(-36.52,40.06,0,1.14) 
      pt3dadd(-37.03,40.9,0,1.14) 
      pt3dadd(-37.7,41.57,0,1.14) 
      pt3dadd(-37.86,42.58,0,1.14) 
      pt3dadd(-38.37,43.08,0,1.14) 
      pt3dadd(-38.71,43.93,0,1.14) 
      pt3dadd(-39.39,44.76,0,1.14) 
      pt3dadd(-39.72,45.61,0,1.14) 
      pt3dadd(-39.89,45.95,0,1.14) 
      pt3dadd(-40.06,46.11,0,1.14) 

    } // end of points list

    {dendrite[22] connect dendrite[23](0), 1}

    basic_shape4()
}

proc basic_shape4() {
    dendrite[23] {
      pt3dclear()
      pt3dadd(-40.06,46.11,0,1.14) 
      pt3dadd(-39.72,46.96,0,1.14) 
      pt3dadd(-39.55,48.81,0,1.14) 
      pt3dadd(-39.05,49.82,0,1.14) 
      pt3dadd(-38.71,50.66,0,1.14) 
      pt3dadd(-38.87,52.34,0,1.14) 
      pt3dadd(-39.05,53.86,0,1.14) 
      pt3dadd(-39.05,54.87,0,1.14) 
      pt3dadd(-39.05,55.88,0,1.14) 
      pt3dadd(-39.29,57.39,0,1.14) 
      pt3dadd(-38.79,59.25,0,1.14) 
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
    } // end of points list

    {dendrite[22] connect dendrite[24](0), 1}

    dendrite[24] {
      pt3dclear()
      pt3dadd(-40.06,46.11,0,1.14) 
      pt3dadd(-41.99,46.28,3.3,1.31) 
      pt3dadd(-43,46.78,3.3,1.31) 
      pt3dadd(-44.18,47.29,3.3,1.31) 
      pt3dadd(-45.36,47.46,3.3,1.31) 
      pt3dadd(-46.2,47.79,3.3,1.31) 
      pt3dadd(-46.96,48.81,-14.89,1.31) 

    } // end of points list

    {dendrite[24] connect dendrite[25](0), 1}

    dendrite[25] {
      pt3dclear()
      pt3dadd(-46.96,48.81,-14.89,1.31) 
      pt3dadd(-47.54,49.48,3.3,1.31) 
      pt3dadd(-48.39,49.82,3.3,1.14) 
      pt3dadd(-49.22,49.82,3.3,1.14) 
      pt3dadd(-49.4,49.32,3.3,1.14) 
      pt3dadd(-49.73,48.98,3.3,1.14) 
      pt3dadd(-50.41,48.98,3.3,1.14) 
      pt3dadd(-50.41,49.65,3.3,1.14) 
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
    } // end of points list

    {dendrite[24] connect dendrite[26](0), 1}

    dendrite[26] {
      pt3dclear()
      pt3dadd(-46.96,48.81,-14.89,1.31) 
      pt3dadd(-47.8,50.15,-9.56,0.98) 
      pt3dadd(-49.32,50.15,-9.56,0.98) 
      pt3dadd(-50.15,48.98,-9.56,0.98) 
      pt3dadd(-49.65,51.16,-4.56,0.98) 
      pt3dadd(-48.31,52.67,-9.56,0.98) 
      pt3dadd(-47.8,54.53,-9.56,0.98) 
      pt3dadd(-47.46,56.04,-4.56,0.98) 
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
    } // end of points list

    {soma connect dendrite[27](0), 0.5}

    dendrite[27] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-39.29,28.61,3.3,1.96) 
      pt3dadd(-39.63,28.78,3.3,1.96) 
      pt3dadd(-40.3,28.78,3.3,1.96) 
      pt3dadd(-40.98,28.78,3.3,1.96) 
      pt3dadd(-41.49,29.28,3.3,1.96) 
      pt3dadd(-41.99,29.28,3.3,1.96) 
      pt3dadd(-42.32,29.28,3.3,1.96) 
      pt3dadd(-43,29.45,3.3,1.96) 
      pt3dadd(-43.34,29.45,3.3,1.96) 
      pt3dadd(-43.85,29.45,3.3,1.96) 
      pt3dadd(-44.01,29.62,3.3,1.96) 

    } // end of points list

    {dendrite[27] connect dendrite[28](0), 1}

    dendrite[28] {
      pt3dclear()
      pt3dadd(-44.01,29.62,3.3,1.96) 
      pt3dadd(-44.86,30.46,3.3,1.8) 
      pt3dadd(-46.03,30.97,3.3,1.8) 
      pt3dadd(-47.04,31.98,3.3,1.8) 
      pt3dadd(-48.05,32.82,3.3,1.8) 
      pt3dadd(-49.65,33.66,6.59,1.47) 
      pt3dadd(-51.16,34.83,6.59,1.47) 
      pt3dadd(-52.17,35.68,6.59,1.47) 
      pt3dadd(-52.67,36.18,6.59,1.47) 

    } // end of points list

    {dendrite[28] connect dendrite[29](0), 1}

    dendrite[29] {
      pt3dclear()
      pt3dadd(-52.67,36.18,6.59,1.47) 
      pt3dadd(-53.68,36.35,6.59,1.31) 
      pt3dadd(-54.87,37.53,6.59,1.14) 
      pt3dadd(-56.38,38.2,6.59,1.14) 
      pt3dadd(-57.56,39.21,6.59,1.14) 
      pt3dadd(-58.91,39.39,6.59,1.14) 
      pt3dadd(-60.25,40.4,6.59,1.14) 
      pt3dadd(-61.59,40.56,6.59,1.14) 
      pt3dadd(-63.11,40.9,6.59,1.14) 
      pt3dadd(-64.96,41.41,6.59,1.14) 
      pt3dadd(-66.48,41.57,6.59,1.14) 
      pt3dadd(-67.83,42.24,6.59,1.14) 
      pt3dadd(-67.99,42.24,6.59,1.14) 

    } // end of points list

    {dendrite[29] connect dendrite[30](0), 1}

    dendrite[30] {
      pt3dclear()
      pt3dadd(-67.99,42.24,6.59,1.14) 
      pt3dadd(-69.34,43.42,6.59,0.98) 
      pt3dadd(-70.18,43.93,6.59,0.98) 
      pt3dadd(-71.86,43.93,6.59,0.98) 
      pt3dadd(-72.87,44.43,6.59,0.98) 
      pt3dadd(-73.04,45.61,6.59,0.98) 
      pt3dadd(-73.72,46.45,3.3,0.98) 
      pt3dadd(-74.73,47.12,3.3,0.98) 
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
    } // end of points list

    {dendrite[29] connect dendrite[31](0), 1}

    dendrite[31] {
      pt3dclear()
      pt3dadd(-67.99,42.24,6.59,1.14) 
      pt3dadd(-70.35,41.74,3.06,1.31) 
      pt3dadd(-73.54,42.42,3.06,1.31) 
      pt3dadd(-75.74,42.42,3.06,1.31) 
      pt3dadd(-76.91,42.24,3.06,1.31) 
      pt3dadd(-79.94,42.92,3.06,1.31) 
      pt3dadd(-82.64,42.92,3.06,1.31) 
      pt3dadd(-85.33,43.25,3.06,1.31) 
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
    } // end of points list

    {dendrite[28] connect dendrite[32](0), 1}
    
    basic_shape5()
}

proc basic_shape5() {
    dendrite[32] {
      pt3dclear()
      pt3dadd(-52.67,36.18,6.59,1.47) 
      pt3dadd(-53.46,37.56,-13.42,1.14) 
      pt3dadd(-53.63,38.4,-13.42,1.14) 
      pt3dadd(-54.97,38.57,-13.42,1.14) 
      pt3dadd(-56.16,39.41,-13.42,1.14) 
      pt3dadd(-57.16,39.91,-13.42,1.14) 
      pt3dadd(-58,39.91,-13.42,1.14) 
      pt3dadd(-58.68,39.75,-13.42,1.14) 
      pt3dadd(-59.35,38.23,-26.61,1.14) 
      pt3dadd(-60.36,38.23,-26.61,1.14) 
      pt3dadd(-61.53,38.23,-26.61,1.14) 
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
    } // end of points list

    {dendrite[27] connect dendrite[33](0), 1}

    dendrite[33] {
      pt3dclear()
      pt3dadd(-44.01,29.62,3.3,1.96) 
      pt3dadd(-45.63,29.31,-13.19,1.31) 
      pt3dadd(-47.65,28.97,-13.19,1.31) 
      pt3dadd(-49.84,28.3,-13.19,1.31) 
      pt3dadd(-52.2,28.14,-13.19,1.31) 
      pt3dadd(-55.23,27.96,-13.19,1.31) 
      pt3dadd(-58.26,27.8,-13.19,1.31) 
      pt3dadd(-59.43,28.14,-9.89,1.31) 
      pt3dadd(-60.78,28.47,-9.89,1.31) 
      pt3dadd(-61.62,28.47,-9.89,1.31) 
      pt3dadd(-62.46,28.64,-9.89,1.31) 

    } // end of points list

    {dendrite[33] connect dendrite[34](0), 1}

    dendrite[34] {
      pt3dclear()
      pt3dadd(-62.46,28.64,-9.89,1.31) 
      pt3dadd(-63.3,27.8,-13.19,1.14) 
      pt3dadd(-64.65,27.3,-13.19,1.14) 
      pt3dadd(-66.33,27.3,-13.19,1.14) 
      pt3dadd(-68.19,25.78,-13.19,1.14) 
      pt3dadd(-70.2,24.09,-13.19,1.14) 
      pt3dadd(-72.48,22.07,-9.89,1.14) 
      pt3dadd(-74.5,19.55,-9.89,1.14) 
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
    } // end of points list

    {dendrite[33] connect dendrite[35](0), 1}

    dendrite[35] {
      pt3dclear()
      pt3dadd(-62.46,28.64,-9.89,1.31) 
      pt3dadd(-63.73,29.31,-9.89,1.31) 
      pt3dadd(-64.4,30.16,-9.89,1.31) 
      pt3dadd(-65.58,30.83,-9.89,1.31) 
      pt3dadd(-66.59,31.5,-9.89,1.31) 
      pt3dadd(-67.42,31.84,-9.89,1.31) 
      pt3dadd(-68.43,32.18,-9.89,1.14) 
      pt3dadd(-69.11,32.18,-9.89,1.14) 

    } // end of points list

    {dendrite[35] connect dendrite[36](0), 1}

    dendrite[36] {
      pt3dclear()
      pt3dadd(-69.11,32.18,-9.89,1.14) 
      pt3dadd(-69.95,33.52,-9.89,0.98) 
      pt3dadd(-71.98,34.36,-9.89,0.98) 
      pt3dadd(-70.85,35.01,0.1,0.98) 
      pt3dadd(-70.18,36.02,0.1,0.98) 
      pt3dadd(-69.5,37.53,0.1,0.98) 
      pt3dadd(-69.5,38.87,0.1,0.98) 
      pt3dadd(-70.18,39.39,5.09,0.98) 
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
    } // end of points list

    {dendrite[35] connect dendrite[37](0), 1}

    dendrite[37] {
      pt3dclear()
      pt3dadd(-69.11,32.18,-9.89,1.14) 
      pt3dadd(-71.47,31.84,-9.89,0.98) 
      pt3dadd(-73.32,32.18,-9.89,0.98) 
      pt3dadd(-75,32.51,-9.89,0.98) 
      pt3dadd(-76.52,32.18,-9.89,0.98) 
      pt3dadd(-78.54,32.34,-9.89,0.98) 
      pt3dadd(-80.56,32.34,-9.89,0.98) 
      pt3dadd(-82.58,32.51,-9.89,0.98) 
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
    } // end of points list

    {soma connect dendrite[38](0), 0.5}

    dendrite[38] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-23.43,17.71,6.59,1.8) 
      pt3dadd(-22.59,17.04,6.59,1.8) 
      pt3dadd(-21.75,16.36,6.59,1.8) 
      pt3dadd(-20.91,15.69,6.59,1.8) 
      pt3dadd(-19.9,14.68,6.59,1.8) 
      pt3dadd(-18.55,13.33,6.59,1.8) 
      pt3dadd(-17.54,12.48,6.59,1.8) 
      pt3dadd(-16.37,11.14,6.59,1.8) 
      pt3dadd(-15.52,9.8,6.59,1.63) 
      pt3dadd(-14.85,8.62,6.59,1.63) 
      pt3dadd(-14.01,7.94,9.89,1.63) 
      pt3dadd(-13.67,7.44,9.89,1.63) 

    } // end of points list

    {dendrite[38] connect dendrite[39](0), 1}

    dendrite[39] {
      pt3dclear()
      pt3dadd(-13.67,7.44,9.89,1.63) 
      pt3dadd(-13.59,6.09,9.89,1.47) 
      pt3dadd(-13.26,5.25,9.89,1.47) 
      pt3dadd(-13.08,4.24,9.89,1.31) 
      pt3dadd(-12.75,2.73,9.89,1.31) 
      pt3dadd(-12.75,1.04,9.89,1.31) 
      pt3dadd(-12.75,-0.8,9.89,1.31) 
      pt3dadd(-12.75,-1.81,9.89,1.31) 
      pt3dadd(-12.58,-2.66,9.89,1.47) 
      pt3dadd(-12.58,-3.67,9.89,1.47) 
      pt3dadd(-12.75,-4.17,9.89,1.31) 
      pt3dadd(-12.92,-5.36,9.89,1.31) 
      pt3dadd(-13.26,-6.69,9.89,1.31) 
      pt3dadd(-13.08,-7.7,9.89,1.31) 
      pt3dadd(-12.58,-8.38,9.89,1.31) 

    } // end of points list

    {dendrite[39] connect dendrite[40](0), 1}

    dendrite[40] {
      pt3dclear()
      pt3dadd(-12.58,-8.38,9.89,1.31) 
      pt3dadd(-11.82,-8.55,9.89,1.14) 
      pt3dadd(-11.14,-8.89,9.89,1.14) 

    } // end of points list

    {dendrite[39] connect dendrite[41](0), 1}

    dendrite[41] {
      pt3dclear()
      pt3dadd(-12.58,-8.38,9.89,1.31) 
      pt3dadd(-12.58,-9.72,6.59,1.47) 
      pt3dadd(-12.41,-10.74,6.59,1.47) 
      pt3dadd(-12.41,-11.58,6.59,1.31) 
      pt3dadd(-12.58,-12.93,6.59,1.31) 
      pt3dadd(-13.26,-13.94,6.59,1.31) 
      pt3dadd(-13.26,-15.29,6.59,1.31) 
      pt3dadd(-13.26,-16.46,6.59,1.31) 
      pt3dadd(-13.26,-18.14,6.59,1.31) 
      pt3dadd(-12.75,-19.66,6.59,1.31) 
      pt3dadd(-12.58,-20.84,6.59,1.31) 
      pt3dadd(-12.41,-21.85,6.59,1.31) 

    } // end of points list

    {dendrite[41] connect dendrite[42](0), 1}

    dendrite[42] {
      pt3dclear()
      pt3dadd(-12.41,-21.85,6.59,1.31) 
      pt3dadd(-12.83,-23.2,6.59,1.31) 
      pt3dadd(-14.01,-24.03,6.59,1.31) 
      pt3dadd(-14.85,-24.87,6.59,1.31) 
      pt3dadd(-15.02,-27.06,6.59,1.31) 
      pt3dadd(-16.53,-28.07,6.59,1.31) 
      pt3dadd(-18.22,-28.24,6.59,1.31) 
      pt3dadd(-19.23,-28.58,6.59,1.31) 
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
    } // end of points list

    {dendrite[42] connect dendrite[43](0), 1}
    basic_shape6()
}

proc basic_shape6() {
    dendrite[43] {
      pt3dclear()
      pt3dadd(-21.41,-47.94,0,1.31) 
      pt3dadd(-21.5,-47.94,-3.3,1.14) 
      pt3dadd(-20.99,-48.95,-3.3,1.14) 
      pt3dadd(-20.99,-49.78,-3.3,1.14) 
      pt3dadd(-21.16,-51.13,-3.3,1.14) 
      pt3dadd(-20.65,-51.97,-3.3,1.14) 
      pt3dadd(-19.31,-52.48,-3.3,1.14) 
      pt3dadd(-18.3,-52.98,-3.3,1.14) 
      pt3dadd(-17.46,-53.49,-3.3,1.14) 
      pt3dadd(-16.79,-53.99,-3.3,1.14) 
      pt3dadd(-16.28,-54.84,-3.3,1.14) 
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
    } // end of points list

    {dendrite[42] connect dendrite[44](0), 1}

    dendrite[44] {
      pt3dclear()
      pt3dadd(-21.41,-47.94,0,1.31) 
      pt3dadd(-22.08,-49.28,0,1.14) 
      pt3dadd(-23.43,-50.28,0,1.14) 
      pt3dadd(-23.6,-51.29,0,1.14) 
      pt3dadd(-23.6,-52.48,-3.3,1.14) 
      pt3dadd(-23.09,-53.99,-3.3,1.14) 
      pt3dadd(-23.69,-56.18,-3.3,1.14) 
      pt3dadd(-23.19,-58.7,-3.3,1.14) 
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
    } // end of points list

    {dendrite[44] connect dendrite[45](0), 1}

    dendrite[45] {
      pt3dclear()
      pt3dadd(-32.35,-87.65,-6.83,1.14) 
      pt3dadd(-32.43,-88.49,-3.53,1.14) 
      pt3dadd(-33.44,-89.33,-3.53,1.14) 
      pt3dadd(-34.12,-90.01,-3.53,1.14) 
      pt3dadd(-34.96,-90.52,-3.53,1.14) 
      pt3dadd(-35.46,-91.02,-3.53,1.14) 
      pt3dadd(-35.3,-92.03,-3.53,1.14) 
      pt3dadd(-34.12,-93.87,-3.53,1.14) 
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
    } // end of points list

    {dendrite[44] connect dendrite[46](0), 1}

    dendrite[46] {
      pt3dclear()
      pt3dadd(-32.35,-87.65,-6.83,1.14) 
      pt3dadd(-30.67,-88.49,-6.83,1.14) 
      pt3dadd(-28.98,-89.33,-6.83,1.14) 
      pt3dadd(-27.47,-91.02,-6.83,1.14) 
      pt3dadd(-25.96,-91.86,-6.83,1.14) 
      pt3dadd(-24.44,-93.2,-6.83,1.14) 
      pt3dadd(-23.6,-93.71,-6.83,1.14) 
      pt3dadd(-21.41,-94.55,-6.83,1.14) 
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
    } // end of points list

    {dendrite[41] connect dendrite[47](0), 1}

    dendrite[47] {
      pt3dclear()
      pt3dadd(-12.41,-21.85,6.59,1.31) 
      pt3dadd(-11.06,-23.7,6.59,1.14) 
      pt3dadd(-10.22,-24.87,6.59,1.14) 
      pt3dadd(-9.13,-26.39,6.59,1.14) 
      pt3dadd(-6.77,-29.25,6.59,1.14) 
      pt3dadd(-4.42,-31.27,6.59,1.14) 
      pt3dadd(-2.73,-33.63,6.59,1.14) 
      pt3dadd(-1.9,-34.97,6.59,1.14) 
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
    } // end of points list

    {dendrite[47] connect dendrite[48](0), 1}

    dendrite[48] {
      pt3dclear()
      pt3dadd(32.78,-69.13,0.87,1.31) 
      pt3dadd(35.05,-71.15,3.3,1.31) 
      pt3dadd(36.4,-72.84,3.3,1.31) 
      pt3dadd(38.08,-73.85,3.3,1.31) 
      pt3dadd(39.59,-76.03,3.3,1.31) 
      pt3dadd(41.61,-78.05,3.3,1.31) 
      pt3dadd(43.81,-80.07,3.3,1.31) 
      pt3dadd(45.65,-82.77,6.59,1.31) 
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
    } // end of points list

    {dendrite[47] connect dendrite[49](0), 1}

    dendrite[49] {
      pt3dclear()
      pt3dadd(32.78,-69.13,0.87,1.31) 
      pt3dadd(32.61,-70.65,0.87,0.98) 
      pt3dadd(34.46,-71.48,0.87,0.98) 
      pt3dadd(35.47,-76.36,0.87,0.98) 
      pt3dadd(36.32,-77.37,0.87,0.98) 
      pt3dadd(37.83,-81.75,5.86,0.98) 
      pt3dadd(39.68,-84.61,-9.12,0.98) 
      pt3dadd(41.02,-89.16,-9.12,0.98) 
      pt3dadd(40.1,-90.17,-9.46,0.98) 
      pt3dadd(40.1,-93.03,-9.46,0.98) 
      pt3dadd(41.79,-94.04,-9.46,0.98) 
      pt3dadd(42.62,-99.25,-9.46,0.98) 
      pt3dadd(45.32,-101.95,-14.45,0.98) 
      pt3dadd(44.31,-104.81,-9.46,0.98) 

    } // end of points list

    {dendrite[38] connect dendrite[50](0), 1}
    
    basic_shape7()
}

proc basic_shape7() {
    dendrite[50] {
      pt3dclear()
      pt3dadd(-13.67,7.44,9.89,1.63) 
      pt3dadd(-11.32,6.93,9.89,1.14) 
      pt3dadd(-10.14,5.76,9.89,1.14) 
      pt3dadd(-8.8,4.75,9.89,1.14) 
      pt3dadd(-7.27,3.23,9.89,1.14) 
      pt3dadd(-4.58,2.39,9.89,1.14) 
      pt3dadd(-2.73,1.88,9.89,1.14) 
      pt3dadd(-1.05,2.39,9.89,1.14) 
      pt3dadd(0.12,2.73,13.19,1.14) 
      pt3dadd(1.14,3.23,13.19,1.14) 
      pt3dadd(1.47,3.4,13.19,1.14) 

    } // end of points list

    {dendrite[50] connect dendrite[51](0), 1}

    dendrite[51] {
      pt3dclear()
      pt3dadd(1.47,3.4,13.19,1.14) 
      pt3dadd(4.5,3.56,26.37,1.14) 
      pt3dadd(6.36,3.56,26.37,1.14) 
      pt3dadd(8.54,3.74,26.37,1.14) 
      pt3dadd(10.39,4.75,26.37,1.14) 
      pt3dadd(11.91,6.09,26.37,1.14) 
      pt3dadd(13.93,7.44,26.37,1.14) 
      pt3dadd(16.79,8.12,26.37,1.14) 
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
    } // end of points list

    {dendrite[50] connect dendrite[52](0), 1}

    dendrite[52] {
      pt3dclear()
      pt3dadd(1.47,3.4,13.19,1.14) 
      pt3dadd(2.74,1.88,13.19,1.14) 
      pt3dadd(3.24,0.71,13.19,1.14) 
      pt3dadd(4.25,0.21,13.19,1.14) 
      pt3dadd(4.92,-0.64,13.19,1.14) 
      pt3dadd(6.11,-1.14,13.19,1.14) 
      pt3dadd(5.93,-2.33,13.19,1.14) 
      pt3dadd(6.27,-3.5,13.19,1.14) 
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
    } // end of points list

    {soma connect dendrite[53](0), 0.5}

    dendrite[53] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-24.52,16.86,9.89,1.47) 
      pt3dadd(-23.19,16.53,9.89,1.47) 
      pt3dadd(-22.18,16.36,9.89,1.47) 
      pt3dadd(-20.99,16.36,9.89,1.47) 
      pt3dadd(-19.82,16.36,9.89,1.47) 
      pt3dadd(-18.47,16.36,9.89,1.47) 
      pt3dadd(-17.62,16.53,9.89,1.47) 
      pt3dadd(-16.95,16.53,9.89,1.47) 

    } // end of points list

    {dendrite[53] connect dendrite[54](0), 1}

    dendrite[54] {
      pt3dclear()
      pt3dadd(-16.95,16.53,9.89,1.47) 
      pt3dadd(-16.19,17.54,9.89,1.31) 
      pt3dadd(-16.19,18.55,9.89,1.31) 
      pt3dadd(-16.37,19.22,9.89,1.31) 
      pt3dadd(-16.37,19.89,6.59,1.31) 
      pt3dadd(-17.72,20.06,6.59,1.31) 
      pt3dadd(-17.72,20.9,6.59,1.31) 
      pt3dadd(-16.53,21.74,6.59,1.31) 
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
    } // end of points list

    {dendrite[53] connect dendrite[55](0), 1}

    dendrite[55] {
      pt3dclear()
      pt3dadd(-16.95,16.53,9.89,1.47) 
      pt3dadd(-15.94,15.69,9.89,1.31) 
      pt3dadd(-14.77,15.35,9.89,1.31) 
      pt3dadd(-13.59,14.5,9.89,1.31) 
      pt3dadd(-11.91,13.67,9.89,1.31) 
      pt3dadd(-10.72,12.66,9.89,1.31) 
      pt3dadd(-9.71,11.65,9.89,1.31) 
      pt3dadd(-6.86,9.13,9.89,1.31) 
      pt3dadd(-4,7.11,9.89,1.31) 
      pt3dadd(-1.47,4.91,9.89,1.31) 
      pt3dadd(-0.79,3.23,13.19,1.31) 
      pt3dadd(0.55,1.38,13.19,1.31) 

    } // end of points list

    {dendrite[55] connect dendrite[56](0), 1}

    dendrite[56] {
      pt3dclear()
      pt3dadd(0.55,1.38,13.19,1.31) 
      pt3dadd(3.33,-0.47,13.19,1.31) 
      pt3dadd(6.19,-3.67,13.19,1.31) 
      pt3dadd(9.56,-5.36,13.19,1.31) 
      pt3dadd(12.41,-6.87,13.19,1.31) 
      pt3dadd(13.42,-7.37,16.48,1.31) 

    } // end of points list

    {dendrite[56] connect dendrite[57](0), 1}

    dendrite[57] {
      pt3dclear()
      pt3dadd(13.42,-7.37,16.48,1.31) 
      pt3dadd(15.7,-6.69,19.55,1.14) 
      pt3dadd(17.05,-5.18,19.55,1.14) 
      pt3dadd(18.06,-3.16,19.55,1.14) 
      pt3dadd(19.07,-1.99,19.55,1.14) 
      pt3dadd(20.91,0.21,22.84,1.14) 
      pt3dadd(22.94,2.39,22.84,1.14) 
      pt3dadd(23.95,4.57,22.84,1.14) 
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
    } // end of points list

    {dendrite[56] connect dendrite[58](0), 1}

    dendrite[58] {
      pt3dclear()
      pt3dadd(13.42,-7.37,16.48,1.31) 
      pt3dadd(15.36,-8.55,16.25,1.14) 
      pt3dadd(18.22,-10.4,16.25,1.14) 
      pt3dadd(23.44,-13.6,16.25,1.14) 
      pt3dadd(25.97,-15.45,16.25,1.14) 
      pt3dadd(28.15,-17.63,16.25,1.14) 
      pt3dadd(30.33,-19.49,16.25,1.14) 
      pt3dadd(31.18,-20.84,16.25,1.14) 
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
    } // end of points list

    {dendrite[55] connect dendrite[59](0), 1}
    
    basic_shape8()
}

proc basic_shape8() {
    dendrite[59] {
      pt3dclear()
      pt3dadd(0.55,1.38,13.19,1.31) 
      pt3dadd(0.89,-0.13,13.19,1.31) 
      pt3dadd(1.39,-1.81,13.19,1.31) 
      pt3dadd(2.56,-3.34,9.89,1.31) 
      pt3dadd(3.91,-6.87,9.89,1.31) 
      pt3dadd(6.27,-10.91,9.89,1.31) 
      pt3dadd(7.79,-14.28,9.89,1.31) 
      pt3dadd(9.47,-17.13,9.89,1.31) 
      pt3dadd(10.98,-18.82,9.89,1.31) 
      pt3dadd(12.67,-20.17,9.89,1.31) 
      pt3dadd(12.33,-22.52,9.89,1.31) 
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
    } // end of points list

    {soma connect dendrite[60](0), 0.5}

    dendrite[60] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-32.39,16.17,-2.8,2.78) 
      pt3dadd(-32.15,13.14,-2.8,2.78) 
      pt3dadd(-33.83,11.46,-2.8,2.12) 
      pt3dadd(-36.02,9.27,-2.8,2.12) 
      pt3dadd(-36.69,8.77,-7.79,1.96) 

    } // end of points list

    {dendrite[60] connect dendrite[61](0), 1}

    dendrite[61] {
      pt3dclear()
      pt3dadd(-36.69,8.77,-7.79,1.96) 
      pt3dadd(-38.37,8.6,-7.79,1.47) 
      pt3dadd(-41.74,8.26,-7.79,1.47) 
      pt3dadd(-44.09,6.92,-7.79,1.47) 

    } // end of points list

    {dendrite[61] connect dendrite[62](0), 1}

    dendrite[62] {
      pt3dclear()
      pt3dadd(-44.09,6.92,-7.79,1.47) 
      pt3dadd(-45.1,4.22,-7.79,1.47) 
      pt3dadd(-47.12,0.35,-2.8,1.47) 
      pt3dadd(-50.66,-2.17,-7.79,1.47) 
      pt3dadd(-53.01,-2,-7.79,1.47) 
      pt3dadd(-55.88,-5.71,-7.79,1.47) 

    } // end of points list

    {dendrite[62] connect dendrite[63](0), 1}

    dendrite[63] {
      pt3dclear()
      pt3dadd(-55.88,-5.71,-7.79,1.47) 
      pt3dadd(-57.56,-8.23,-12.79,1.31) 
      pt3dadd(-55.88,-8.9,-12.79,1.31) 
      pt3dadd(-56.89,-11.09,-12.79,1.31) 
      pt3dadd(-58.91,-9.24,-17.78,1.31) 
      pt3dadd(-59.25,-9.74,-17.78,1.31) 
      pt3dadd(-59.92,-10.75,-17.78,1.31) 
      pt3dadd(-60.25,-12.94,-27.77,1.31) 
      pt3dadd(-58.74,-14.63,-27.77,1.31) 
      pt3dadd(-60.08,-15.8,-27.77,1.31) 
      pt3dadd(-61.01,-16.81,-27.77,1.31) 
      pt3dadd(-58.14,-14.97,-37.76,1.31) 
      pt3dadd(-56.3,-17.15,-42.76,1.31) 

    } // end of points list

    {dendrite[62] connect dendrite[64](0), 1}

    dendrite[64] {
      pt3dclear()
      pt3dadd(-55.88,-5.71,-7.79,1.47) 
      pt3dadd(-57.47,-6.88,-7.79,1.31) 
      pt3dadd(-63.03,-10.59,-7.79,1.31) 
      pt3dadd(-68.75,-14.29,-7.79,1.31) 
      pt3dadd(-73.96,-15.64,-7.79,1.31) 
      pt3dadd(-77.5,-18.16,-7.79,1.31) 
      pt3dadd(-79.02,-19.17,-7.79,1.31) 
      pt3dadd(-81.71,-19.17,-7.79,1.31) 
      pt3dadd(-88.45,-21.53,-7.79,1.31) 
      pt3dadd(-90.63,-21.87,-7.79,1.14) 
      pt3dadd(-92.14,-21.87,-7.79,1.14) 
      pt3dadd(-98.7,-24.05,-7.79,1.14) 
      pt3dadd(-104.77,-28.43,-2.8,0.98) 

    } // end of points list

    {dendrite[64] connect dendrite[65](0), 1}

    dendrite[65] {
      pt3dclear()
      pt3dadd(-104.77,-28.43,-2.8,0.98) 
      pt3dadd(-105.28,-32.63,-2.8,0.98) 
      pt3dadd(-106.96,-37.68,-2.8,0.98) 
      pt3dadd(-109.14,-39.53,-2.8,0.98) 
      pt3dadd(-107.62,-45.42,2.2,0.98) 
      pt3dadd(-108.3,-48.12,7.19,0.98) 
      pt3dadd(-110.91,-51.15,11.85,0.98) 
      pt3dadd(-110.91,-53.67,16.85,0.98) 
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
    } // end of points list

    {dendrite[64] connect dendrite[66](0), 1}

    dendrite[66] {
      pt3dclear()
      pt3dadd(-104.77,-28.43,-2.8,0.98) 
      pt3dadd(-107.71,-29.77,-7.79,0.98) 
      pt3dadd(-114.1,-34.32,-7.79,0.98) 
      pt3dadd(-118.66,-33.98,-7.79,0.98) 
      pt3dadd(-124.88,-36.67,-12.79,0.98) 
      pt3dadd(-125.89,-38.86,-12.79,0.98) 
      pt3dadd(-128.08,-38.86,-12.79,0.98) 
      pt3dadd(-131.78,-45.26,-12.79,0.98) 
      pt3dadd(-134.64,-45.59,-12.79,0.98) 
      pt3dadd(-140.53,-42.9,-12.79,0.98) 
      pt3dadd(-145.24,-43.91,-12.79,0.98) 
      pt3dadd(-152.65,-41.89,-22.78,0.98) 
      pt3dadd(-156.52,-40.72,-17.78,0.98) 
      pt3dadd(-161.06,-36.67,-17.78,0.98) 
      pt3dadd(-169.39,-34.32,-18.12,0.98) 
      pt3dadd(-174.44,-35.49,-23.11,0.98) 
      pt3dadd(-177.97,-34.48,-28.11,0.98) 
      pt3dadd(-179.16,-32.81,-28.11,0.98) 
      pt3dadd(-181,-31.29,-23.11,0.98) 
      pt3dadd(-179.66,-26.74,-23.11,0.98) 
      pt3dadd(-182.35,-24.9,-18.12,0.98) 

    } // end of points list

    {dendrite[61] connect dendrite[67](0), 1}

    dendrite[67] {
      pt3dclear()
      pt3dadd(-44.09,6.92,-7.79,1.47) 
      pt3dadd(-45.53,8.1,-7.79,0.98) 
      pt3dadd(-46.7,8.6,-7.79,0.98) 
      pt3dadd(-48.39,10.28,-7.79,0.98) 
      pt3dadd(-52.09,10.11,-7.79,0.98) 
      pt3dadd(-56.12,11.46,-12.79,0.98) 
      pt3dadd(-57.31,11.29,-12.79,0.98) 
      pt3dadd(-63.03,12.47,-12.79,0.98) 
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
    } // end of points list

    {dendrite[60] connect dendrite[68](0), 1}

    dendrite[68] {
      pt3dclear()
      pt3dadd(-36.69,8.77,-7.79,1.96) 
      pt3dadd(-36.44,10.45,-7.79,1.31) 
      pt3dadd(-35.09,11.97,-7.79,1.31) 
      pt3dadd(-35.43,14.49,-7.79,1.31) 
      pt3dadd(-33.91,13.65,-12.79,1.31) 
      pt3dadd(-31.89,11.97,-12.79,1.31) 
      pt3dadd(-29.71,11.97,-17.78,1.31) 
      pt3dadd(-28.03,7.09,-12.79,1.31) 
      pt3dadd(-27.52,4.56,-17.78,1.31) 
      pt3dadd(-23.98,3.88,-17.78,1.31) 
      pt3dadd(-23.47,-1.16,-22.78,1.31) 
      pt3dadd(-20.12,-3.35,-22.78,1.31) 
      pt3dadd(-19.44,-6.21,-22.78,1.31) 
      pt3dadd(-17.92,-8.57,-22.78,1.31) 
      pt3dadd(-17.92,-11.42,-27.77,1.31) 
      pt3dadd(-15.23,-14.29,-27.77,1.31) 
      pt3dadd(-11.53,-18.5,-32.77,1.31) 
      pt3dadd(-6.64,-23.89,-32.77,1.31) 
      pt3dadd(-4.72,-25.56,-32.77,1.31) 
      pt3dadd(1.51,-29.6,-32.77,1.31) 
      pt3dadd(3.87,-32.81,-37.76,1.31) 
      pt3dadd(4.2,-33.14,-47.75,1.31) 

    } // end of points list

    {soma connect dendrite[69](0), 0.5}

    dendrite[69] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-37.99,21.74,23.31,1.96) 
      pt3dadd(-39.01,21.24,23.31,1.96) 
      pt3dadd(-40.18,20.06,23.31,1.96) 
      pt3dadd(-41.19,19.22,23.31,1.8) 
      pt3dadd(-43.04,18.21,23.31,1.8) 
      pt3dadd(-44.22,17.2,23.31,1.63) 
      pt3dadd(-46.4,16.19,23.31,1.63) 
      pt3dadd(-47.93,15.18,23.31,1.63) 
      pt3dadd(-49.26,13.83,23.31,1.63) 
      pt3dadd(-50.11,12.66,23.31,1.63) 
      pt3dadd(-50.78,10.97,23.31,1.63) 
      pt3dadd(-51.28,10.14,26.61,1.47) 
      pt3dadd(-52.13,9.29,26.61,1.47) 

    } // end of points list

    {dendrite[69] connect dendrite[70](0), 1}

    dendrite[70] {
      pt3dclear()
      pt3dadd(-52.13,9.29,26.61,1.47) 
      pt3dadd(-52.63,7.94,26.61,1.31) 
      pt3dadd(-53.64,6.26,26.61,1.31) 
      pt3dadd(-54.49,3.4,26.61,1.31) 
      pt3dadd(-54.73,2.05,26.61,1.31) 
      pt3dadd(-54.57,0.54,26.61,1.31) 
      pt3dadd(-54.91,-1.14,26.61,1.31) 

    } // end of points list

    {dendrite[70] connect dendrite[71](0), 1}

    dendrite[71] {
      pt3dclear()
      pt3dadd(-54.91,-1.14,26.61,1.31) 
      pt3dadd(-52.72,-3.5,26.61,1.31) 
      pt3dadd(-51.2,-6.03,26.61,1.31) 
      pt3dadd(-49.85,-7.7,26.61,1.14) 
      pt3dadd(-47.83,-9.9,26.61,1.14) 
      pt3dadd(-45.99,-11.92,26.61,1.14) 
      pt3dadd(-44.98,-13.77,26.61,1.14) 
      pt3dadd(-43.8,-15.29,26.61,1.14) 
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
    } // end of points list

    {dendrite[71] connect dendrite[72](0), 1}

    dendrite[72] {
      pt3dclear()
      pt3dadd(-34.29,-50.46,23.31,1.14) 
      pt3dadd(-33.53,-52.98,23.08,0.65) 
      pt3dadd(-32.69,-54.84,23.08,0.65) 
      pt3dadd(-32.01,-57.69,23.08,0.65) 
      pt3dadd(-31.18,-59.88,23.08,0.65) 
      pt3dadd(-31.18,-62.07,23.08,0.65) 
      pt3dadd(-31.85,-63.76,23.08,0.65) 
      pt3dadd(-34.21,-64.26,23.08,0.65) 
      pt3dadd(-34.55,-65.94,23.08,0.65) 
      pt3dadd(-34.55,-67.79,23.08,0.65) 
      pt3dadd(-33.53,-68.46,23.08,0.65) 
      pt3dadd(-33.53,-70.14,23.08,0.65) 
      pt3dadd(-34.55,-71.15,23.08,0.65) 
      pt3dadd(-34.55,-72.68,19.78,0.65) 
      pt3dadd(-35.22,-75.03,19.78,0.65) 
      pt3dadd(-35.72,-77.38,19.78,0.65) 
      pt3dadd(-34.63,-79.24,19.55,0.65) 
      pt3dadd(-33.62,-80.92,19.55,0.65) 
      pt3dadd(-33.11,-82.61,19.55,0.65) 
      pt3dadd(-32.27,-84.12,19.55,0.65) 
      pt3dadd(-31.43,-84.79,19.55,0.65) 

    } // end of points list

    {dendrite[72] connect dendrite[73](0), 1}

    dendrite[73] {
      pt3dclear()
      pt3dadd(-31.43,-84.79,19.55,0.65) 
      pt3dadd(-29.24,-84.45,19.55,0.65) 
      pt3dadd(-27.55,-84.28,19.55,0.65) 
      pt3dadd(-26.38,-84.45,19.55,0.65) 
      pt3dadd(-24.19,-84.28,22.84,0.65) 
      pt3dadd(-22.51,-83.28,22.84,0.65) 
      pt3dadd(-20.99,-82.61,22.84,0.65) 
      pt3dadd(-18.3,-82.77,26.14,0.65) 
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
    } // end of points list

    {dendrite[72] connect dendrite[74](0), 1}

    dendrite[74] {
      pt3dclear()
      pt3dadd(-31.43,-84.79,19.55,0.65) 
      pt3dadd(-29.45,-88.14,-0.47,1.31) 
      pt3dadd(-27.1,-91.51,-0.47,1.31) 
      pt3dadd(-26.25,-95.88,4.53,1.14) 
      pt3dadd(-25.75,-99.08,4.53,1.14) 
      pt3dadd(-23.9,-101.77,-5.46,1.14) 
      pt3dadd(-24.74,-104.8,-5.46,1.14) 
      pt3dadd(-25.25,-107.49,-5.46,1.14) 
      pt3dadd(-28.27,-109.68,-10.46,1.14) 
      pt3dadd(-27.93,-115.74,-5.46,1.14) 
      pt3dadd(-24.74,-121.63,-5.46,1.14) 
      pt3dadd(-25.59,-124.99,-0.47,1.14) 

    } // end of points list

    {dendrite[71] connect dendrite[75](0), 1}

    dendrite[75] {
      pt3dclear()
      pt3dadd(-34.29,-50.46,23.31,1.14) 
      pt3dadd(-34.29,-51.47,23.31,0.65) 
      pt3dadd(-34.45,-52.81,23.31,0.65) 
      pt3dadd(-34.29,-54.32,23.31,0.65) 
      pt3dadd(-33.62,-55.51,23.31,0.65) 
      pt3dadd(-31.77,-56.68,26.61,0.65) 
      pt3dadd(-30.42,-58.19,26.61,0.65) 
      pt3dadd(-30.09,-59.71,26.61,0.65) 
      pt3dadd(-30.25,-60.39,26.61,0.65) 
      pt3dadd(-30.33,-61.06,26.61,0.65) 
      pt3dadd(-30.33,-61.9,26.61,0.65) 
      pt3dadd(-29.66,-62.07,26.61,0.65) 
      pt3dadd(-29.66,-63.08,26.61,0.65) 
      pt3dadd(-30.33,-63.76,29.9,0.65) 
      pt3dadd(-30.33,-64.26,29.9,0.65) 
      pt3dadd(-29.32,-64.93,29.9,0.65) 
      pt3dadd(-28.82,-65.6,29.9,0.65) 

    } // end of points list

    {dendrite[70] connect dendrite[76](0), 1}

    dendrite[76] {
      pt3dclear()
      pt3dadd(-54.91,-1.14,26.61,1.31) 
      pt3dadd(-56.21,-3.35,16.52,1.14) 
      pt3dadd(-58.74,-5.71,16.52,1.14) 
      pt3dadd(-60.08,-6.05,16.52,1.14) 

    } // end of points list

    {dendrite[76] connect dendrite[77](0), 1}
    
    basic_shape9()
}

proc basic_shape9() {
    dendrite[77] {
      pt3dclear()
      pt3dadd(-60.08,-6.05,16.52,1.14) 
      pt3dadd(-62.44,-9.74,16.52,1.14) 
      pt3dadd(-65.14,-13.62,16.52,1.14) 
      pt3dadd(-66.48,-15.47,16.52,1.14) 
      pt3dadd(-66.82,-16.98,16.52,1.14) 
      pt3dadd(-69.26,-19.67,16.18,1.14) 
      pt3dadd(-71.28,-22.7,16.18,1.14) 
      pt3dadd(-71.44,-26.23,16.18,1.14) 

    } // end of points list

    {dendrite[77] connect dendrite[78](0), 1}

    dendrite[78] {
      pt3dclear()
      pt3dadd(-71.44,-26.23,16.18,1.14) 
      pt3dadd(-72.63,-29.6,16.18,1.14) 
      pt3dadd(-78.52,-35.49,21.18,1.14) 
      pt3dadd(-81.37,-37.17,21.18,1.14) 
      pt3dadd(-85.58,-43.4,16.18,1.14) 
      pt3dadd(-87.6,-45.26,16.18,1.14) 
      pt3dadd(-95.01,-48.79,16.18,1.14) 
      pt3dadd(-99.29,-51.48,20.85,1.14) 
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
    } // end of points list

    {dendrite[77] connect dendrite[79](0), 1}

    dendrite[79] {
      pt3dclear()
      pt3dadd(-71.44,-26.23,16.18,1.14) 
      pt3dadd(-70.35,-29.1,16.18,1.14) 
      pt3dadd(-73.38,-29.94,16.18,1.14) 
      pt3dadd(-71.86,-31.96,11.19,1.14) 
      pt3dadd(-71.19,-33.47,11.19,1.14) 
      pt3dadd(-71.7,-35.15,11.19,1.14) 
      pt3dadd(-75.9,-37.68,6.19,1.14) 
      pt3dadd(-77.09,-40.88,6.19,1.14) 
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
    } // end of points list

    {dendrite[76] connect dendrite[80](0), 1}

    dendrite[80] {
      pt3dclear()
      pt3dadd(-60.08,-6.05,16.52,1.14) 
      pt3dadd(-63.2,-5.04,21.51,1.14) 
      pt3dadd(-64.04,-6.38,21.51,1.14) 
      pt3dadd(-65.22,-5.54,26.51,1.14) 
      pt3dadd(-65.38,-6.88,26.51,1.14) 
      pt3dadd(-67.74,-7.39,31.5,1.14) 
      pt3dadd(-69.42,-11.93,26.51,1.14) 
      pt3dadd(-71.78,-11.09,31.5,1.14) 
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
    } // end of points list

    {dendrite[69] connect dendrite[81](0), 1}

    dendrite[81] {
      pt3dclear()
      pt3dadd(-52.13,9.29,26.61,1.47) 
      pt3dadd(-58.52,8.62,16.52,1.14) 
      pt3dadd(-59.53,7.94,21.51,1.14) 
      pt3dadd(-65.26,6.6,26.51,1.14) 
      pt3dadd(-65.93,4.75,21.51,1.14) 
      pt3dadd(-70.81,5.92,31.5,1.14) 
      pt3dadd(-71.99,5.25,31.5,1.14) 
      pt3dadd(-73.34,6.77,31.5,1.14) 
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
    } // end of points list

    {soma connect dendrite[82](0), 0.5}

    dendrite[82] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-36.04,25.21,19.98,1.14) 
      pt3dadd(-37.55,25.04,19.98,1.14) 
      pt3dadd(-38.56,23.19,19.98,1.14) 
      pt3dadd(-38.9,24.53,19.98,1.14) 

    } // end of points list

    {dendrite[82] connect dendrite[83](0), 1}

    dendrite[83] {
      pt3dclear()
      pt3dadd(-38.9,24.53,19.98,1.14) 
      pt3dadd(-39.57,23.69,19.98,1.14) 
      pt3dadd(-42.1,24.03,24.97,1.14) 
      pt3dadd(-45.46,23.02,29.97,1.14) 
      pt3dadd(-53.71,25.04,29.97,1.14) 
      pt3dadd(-54.72,26.89,29.97,1.14) 
      pt3dadd(-58.26,26.89,39.96,1.14) 
      pt3dadd(-64.82,31.94,49.95,1.14) 
      pt3dadd(-71.98,33.45,44.62,1.14) 
      pt3dadd(-76.68,35.31,54.61,1.14) 
      pt3dadd(-79.21,46.92,59.61,1.14) 
      pt3dadd(-79.21,48.1,59.61,1.14) 

    } // end of points list

    {dendrite[82] connect dendrite[84](0), 1}

    dendrite[84] {
      pt3dclear()
      pt3dadd(-38.9,24.53,19.98,1.14) 
      pt3dadd(-38.99,27.74,19.65,1.14) 
      pt3dadd(-38.82,32.11,19.65,1.14) 
      pt3dadd(-34.78,33.45,29.64,1.14) 
      pt3dadd(-30.07,31.6,29.64,1.14) 
      pt3dadd(-29.4,30.77,29.64,1.14) 
      pt3dadd(-26.19,29.58,49.62,1.14) 
      pt3dadd(-25.69,27.9,59.61,1.14) 

    } // end of points list

    {soma connect dendrite[85](0), 0.5}

    dendrite[85] {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-35.68,31.98,-16.48,2.29) 
      pt3dadd(-36.18,33.16,-16.48,2.29) 
      pt3dadd(-36.52,34.17,-16.48,2.29) 
      pt3dadd(-36.52,35.01,-16.48,2.29) 
      pt3dadd(-36.85,35.51,-19.78,2.12) 
      pt3dadd(-37.03,36.02,-19.78,2.12) 

    } // end of points list

    {dendrite[85] connect dendrite[86](0), 1}

    dendrite[86] {
      pt3dclear()
      pt3dadd(-37.03,36.02,-19.78,2.12) 
      pt3dadd(-36.52,37.19,-6.59,1.14) 
      pt3dadd(-36.02,37.86,-6.59,1.14) 
      pt3dadd(-35.34,37.86,-6.59,1.14) 
      pt3dadd(-34.83,37.86,-6.59,1.14) 
      pt3dadd(-35.01,39.21,-6.59,1.14) 
      pt3dadd(-35.01,40.06,-6.59,1.14) 
      pt3dadd(-34.33,40.56,-6.59,1.14) 
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
    } // end of points list

    {dendrite[85] connect dendrite[87](0), 1}

    dendrite[87] {
      pt3dclear()
      pt3dadd(-37.03,36.02,-19.78,2.12) 
      pt3dadd(-38.04,36.69,-19.78,1.31) 
      pt3dadd(-38.37,37.86,-19.78,1.31) 
      pt3dadd(-39.21,38.71,-19.78,1.31) 
      pt3dadd(-39.89,39.39,-19.78,1.31) 
      pt3dadd(-40.9,39.39,-19.78,1.31) 
      pt3dadd(-41.57,40.06,-19.78,1.31) 
      pt3dadd(-41.91,41.41,-19.78,1.31) 
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
    } // end of points list

    {soma connect axon(0), 0.5}
    
    basic_shape10()
}

proc basic_shape10() {
    axon {
      pt3dclear()

      //  Note: not adding point: (-31.809,23.803,0,18.199) on parent, as this is a connection to the soma.
      //  connect statement above means that this section is connected by a zero resistance wire to that point.

      pt3dadd(-36.63,20.66,4.66,1.31) 
      pt3dadd(-39.15,17.13,4.66,1.31) 
      pt3dadd(-39.15,12.93,9.66,1.31) 
      pt3dadd(-37.13,11.07,9.66,1.31) 
      pt3dadd(-35.62,11.41,14.65,1.31) 
      pt3dadd(-35.62,9.72,14.65,1.31) 
      pt3dadd(-36.3,8.38,14.65,1.31) 
      pt3dadd(-34.44,5.85,19.65,1.31) 
      pt3dadd(-34.78,3.33,19.65,1.31) 
      pt3dadd(-37.31,3.67,19.65,1.31) 
      pt3dadd(-38.14,2.32,24.64,1.31) 
      pt3dadd(-37.31,0.47,34.63,1.31) 
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
    }

    {define_shape()}

    sl = new SectionList()
    forall sl.append
}

endtemplate stellate_garden
