/* ----------------------------------------------------------------------------
 * stellate-remme.hoc
 * 2012-07-17, Christoph Schmidt-Hieber, University College London
 *
 * based on j7.hoc from:
 * M. W. Remme, M. Lengyel, B. S. Gutkin
 * Democracy-independence trade-off in oscillating dendrites and its 
 * implications for grid cells.
 * Neuron 66, 429 (2010).
 *
 * According to the Remme et al.:
 * "A compartmental model of a reconstructed cortical spiny stellate cell with 
 * representative morphology (Klink and Alonso, 1997)"
 * However, this seems to be a neocortical L4 spiny stellate neuron, as used by
 * Mainen et al., 1996.
 * ----------------------------------------------------------------------------*/

// load gui or stdrun:
load_file("stdrun.hoc")
load_file("./nrn/share/genutils.hoc")
load_file("./nrn/share/fixnseg.hoc")

begintemplate stellate_remme

public init, topol, biophys
public connect2target
public a1_1, a1_11, a1_111, a1_112, a1_12, a1_121, a1_1211, a1_1212, a1_122, a1_1221, a1_1222
public a2_1, a2_11, a2_111, a2_112, a2_1121, a2_11211, a2_11212, a2_1122, a2_11221, a2_11222, a2_12, a2_121, a2_122, a2_1221, a2_1222
public a3_1, a3_11, a3_111, a3_1111, a3_1112, a3_11121, a3_11122, a3_111221, a3_111222, a3_1112221, a3_1112222, a3_112, a3_1121, a3_1122, a3_12, a3_121, a3_122, a3_1221, a3_1222
public a4_1, a4_11, a4_111, a4_112, a4_12
public a5_1, a5_11, a5_111, a5_1111, a5_11111, a5_11112, a5_1112, a5_11121, a5_11122, a5_111221, a5_111222, a5_112, a5_1121, a5_11211, a5_11212, a5_112121, a5_112122, a5_1122, a5_12, a5_121, a5_1211, a5_1212, a5_122
public a6_1, a6_11, a6_111, a6_112, a6_1121, a6_1122, a6_12
public soma
public sl
public somaloc, dendlist
public Vrest

external geom_nseg_shared

objref sl, somaloc, dendlist

proc init() {
    topol()
    biophys()
    geom_nseg()
}

create a1_1
create a1_11
create a1_111
create a1_112
create a1_12
create a1_121
create a1_1211
create a1_1212
create a1_122
create a1_1221
create a1_1222
create a2_1
create a2_11
create a2_111
create a2_112
create a2_1121
create a2_11211
create a2_11212
create a2_1122
create a2_11221
create a2_11222
create a2_12
create a2_121
create a2_122
create a2_1221
create a2_1222
create a3_1
create a3_11
create a3_111
create a3_1111
create a3_1112
create a3_11121
create a3_11122
create a3_111221
create a3_111222
create a3_1112221
create a3_1112222
create a3_112
create a3_1121
create a3_1122
create a3_12
create a3_121
create a3_122
create a3_1221
create a3_1222
create a4_1
create a4_11
create a4_111
create a4_112
create a4_12
create a5_1
create a5_11
create a5_111
create a5_1111
create a5_11111
create a5_11112
create a5_1112
create a5_11121
create a5_11122
create a5_111221
create a5_111222
create a5_112
create a5_1121
create a5_11211
create a5_11212
create a5_112121
create a5_112122
create a5_1122
create a5_12
create a5_121
create a5_1211
create a5_1212
create a5_122
create a6_1
create a6_11
create a6_111
create a6_112
create a6_1121
create a6_1122
create a6_12
create soma

obfunc connect2target() {localobj nc //$o1 target point process, optional $o2 returned NetCon
    soma nc = new NetCon(&v(0), $o1)
    nc.threshold = 10
    if (numarg() == 2) { $o2 = nc } // for backward compatibility
    return nc
}

proc biophys() {
    // initialize user-defined membrane parameters
    celsius=35
    global_ra=139.09 // internal resistivity in ohm-cm
    Cm=1.0           // specific membrane capacitance in uF/cm^2
    Rm=30000.0       // CSH, 2012-07-06: passive tau_m is ~ 30ms in Garden et al.
    rmsoma=Rm

    Vleak=-80.0            // leak reversal CSH, 2011-11-08: -72->-80 to reflect our V_rest
    Vrest=-60.54           // resting potential -63 in control
    hblock=0               // amount of actual Ih blockade               
    maxfastq=9.8e-5         // units are S/cm2
    maxslowq=5.3e-5         // units are S/cm2
    minfastq=maxfastq         // units are S/cm2
    minslowq=maxslowq         // units are S/cm2

    print "Inserting passive membrane"
    forall {insert pas Ra=global_ra e_pas=Vleak}
    print "Inserting spines and setting spine scale values"
    forall { insert spines scale_spines=1.0 }
    print "Initializing uniform passive membrane properties"
    Rm=rmsoma
    forall { g_pas=1/(Rm/scale_spines) cm=Cm*scale_spines Ra = global_ra }

    printf("Inserting sag conductance in all segments: %d percent blocked\n",hblock*100)
    forall { insert ih gfastbar_ih=0 gslowbar_ih=0}
    
    print "Initializing uniform sag conductance in all segments\n"
    forall { gfastbar_ih=maxfastq*scale_spines*(1-hblock) gslowbar_ih=maxslowq*scale_spines*(1-hblock)}
    
    gnabar=0.04        /* sodium conductance; CSH 2011-11-08 reduced from 0.05->0.04 to set spike threshold */
    gka = 0.022 // .036     /* A-type potassium density */
    gkdr=0.022              /* delayed rectifier density */
    
    forall {
        insert nax  gbar_nax=0.15*gnabar // 0.15
	insert nap  gbar_nap=0.0
        insert kdr  gkdrbar_kdr=0.5*gkdr
        insert kap  gkabar_kap=1.0*gka
    }

    soma { 
        gbar_nax=1.00*gnabar
        gkdrbar_kdr=1.0*gkdr
        gkabar_kap=1.0*gka
    }
        
    print "Active properties and channels initialized\n"
    access soma
}

proc geom_nseg() {
    geom_nseg_shared()
}

proc define_locs() {
    soma     somaloc = new Location(0.5)
    dendlist = new List()

    a3_1222   dendlist.append(new Location(0.8))
    a3_121    dendlist.append(new Location(0.8))

    a5_112122 dendlist.append(new Location(0.8))
    a5_1122   dendlist.append(new Location(0.8))

    a6_1121   dendlist.append(new Location(0.8))
    a6_111    dendlist.append(new Location(0.8))

    a4_12     dendlist.append(new Location(0.8))
    a4_111    dendlist.append(new Location(0.8))

    a1_1222   dendlist.append(new Location(0.8))
    a1_1211   dendlist.append(new Location(0.8))

    a2_11221  dendlist.append(new Location(0.8))
    a2_11222  dendlist.append(new Location(0.8))

}

proc define_lengths() {
      soma                 { L = 10.4946 diam = 23.6128    }
      a1_1                 { L = 31.5033 diam = 1.61111  }
      a1_11                { L = 62.7387 diam = 0.983333 }
      a1_111               { L = 57.289  diam = 0.618421 }
      a1_112               { L = 56.4965 diam = 0.588235 }
      a1_12                { L = 13.1625 diam = 1.4      }
      a1_121               { L = 7.49133 diam = 1.625    }
      a1_1211              { L = 122.064 diam = 0.628205 }
      a1_1212              { L = 136.328 diam = 0.788462 }
      a1_122               { L = 26.3683 diam = 1.08333  }
      a1_1221              { L = 81.8433 diam = 0.684211 }
      a1_1222              { L = 124.986 diam = 0.83     }
      a2_1                 { L = 15.6653 diam = 1.91667  }
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}

// Remme 2008 : check tapering

proc check_tree() { local dd,i,nd
     nd = 0
     forall {
	 for i = 0,n3d()-1 {
	     dd = diam3d(i)
	     if ( dd < 0.5 ) {
		 pt3dchange(i, 0.5)
		 nd = nd+1
	     }
	 }
     }
     forall { area(0.5) }
     define_shape()
}

proc topol() {
    basic_shape()
    define_locs()
}

proc basic_shape() {
    a1_1 {
      pt3dclear()
      pt3dadd(4.75,-37.75,-9.75,3.75)
      pt3dadd(2.5,-39.25,-9.75,1.75)
      pt3dadd(-0.75,-41.75,-11.25,2)
      pt3dadd(-3.25,-44.5,-12.5,1)
      pt3dadd(-7.25,-46.25,-13.75,0.75)
      pt3dadd(-9.25,-48.25,-14.75,1.5)
      pt3dadd(-11.75,-49,-16.5,2)
      pt3dadd(-15.25,-51.75,-18.5,2.5)
      pt3dadd(-18.5,-53.75,-20.25,1.5)
      pt3dadd(-18.5,-53.75,-19.5,1.5)
    }
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    }
    basic_shape2()
}

proc basic_shape2() {
    a2_11222 {
      pt3dclear()
      pt3dadd(70,-23.25,-21.25,2.5)
      pt3dadd(71.5,-23.5,-20.75,1)
      pt3dadd(74,-24.5,-20.75,1)
      pt3dadd(78,-24.5,-21.75,1)
      pt3dadd(82.5,-23.5,-22.25,1.5)
      pt3dadd(86,-22.75,-22.75,0.5)
      pt3dadd(89.5,-20.5,-22.5,1)
      pt3dadd(92.75,-18.75,-23,0.75)
      pt3dadd(97.5,-17,-24.75,1)
      pt3dadd(101.5,-15.5,-25.25,1)
      pt3dadd(105.75,-12.5,-26.25,0.5)
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    }
    basic_shape3()
}

proc basic_shape3() {
    a3_1112222 {
      pt3dclear()
      pt3dadd(25,-99.25,-61.5,1)
      pt3dadd(24.75,-99.25,-60.75,0.5)
      pt3dadd(24.75,-102.25,-61.75,0.5)
      pt3dadd(24.75,-107.25,-61.5,0.5)
      pt3dadd(25.25,-111.25,-63.5,0.5)
      pt3dadd(25.75,-115.25,-65.5,0.5)
      pt3dadd(28.5,-120.5,-69.75,0.5)
      pt3dadd(29.25,-124,-74.25,0.5)
      pt3dadd(30,-125.25,-75.75,0.5)
      pt3dadd(31.75,-125.5,-76.75,1)
      pt3dadd(33.75,-126,-76.75,0.5)
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      // pt3dadd(9,-85.5,-26.5,0.25)
      // pt3dadd(9,-86.5,-26.5,0.25)
    }

    a3_1121 {
      pt3dclear()
      // pt3dadd(9,-86.5,0,0.25)
      // pt3dadd(8.5,-86.5,0,0.25)
      pt3dadd(5.5,-89.5,-26.75,1.5)
      pt3dadd(3,-95.75,-28.75,1)
      pt3dadd(0.5,-96.75,-31,0.5)
      pt3dadd(-1.5,-98.75,-29.5,0.75)
      pt3dadd(-3.5,-99.75,-30,1)
      pt3dadd(-4.5,-101.5,-30.5,0.5)
      pt3dadd(-7,-101,-31,1)
      pt3dadd(-9.5,-103,-32,1)
      pt3dadd(-12.75,-104.25,-32,0.5)
      pt3dadd(-14.5,-107,-31.5,0.5)
      pt3dadd(-17.25,-109.25,-32.25,0.5)
      pt3dadd(-18.5,-111.5,-32.5,0.5)
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      // pt3dadd(9,-86.5,0,0.25)
      pt3dadd(9.5,-87.5,-26.75,1.5)
      pt3dadd(10.25,-101,-28.75,1)
      pt3dadd(11,-106,-29.5,0.5)
      pt3dadd(11.5,-107.5,-30,1)
      pt3dadd(12.25,-110.75,-32.25,1)
      pt3dadd(12.75,-114.75,-33.75,1)
      pt3dadd(13.5,-118.75,-35,0.5)
      pt3dadd(14.75,-124.25,-36.75,0.5)
      pt3dadd(16.25,-127,-39.25,1)
      pt3dadd(16.75,-129,-39,0.5)
      pt3dadd(18,-130.75,-40,0.5)
      pt3dadd(19,-134.25,-39.75,0.5)
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      // pt3dadd(3,-23,0,0.25)
      pt3dadd(4.75,-23,-2,1)
      pt3dadd(3.5,-20.25,-4.5,1)
      pt3dadd(3.5,-20.25,-5.25,1.5)
    }

    a4_111 {
      pt3dclear()
      pt3dadd(3.5,-20.25,-5.25,1.5)
      pt3dadd(3.75,-19.75,-6.75,0.5)
      pt3dadd(5,-17.5,-11,0.5)
      pt3dadd(6,-15.25,-16.5,0.75)
      pt3dadd(9,-13.5,-21.75,0.5)
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    basic_shape4()
}

proc basic_shape4() {
    a4_12 {
      pt3dclear()
      pt3dadd(6,-23,-20,2.25)
      pt3dadd(6.5,-22.75,-19.5,1)
      pt3dadd(5.75,-21,-19.25,0.5)
      pt3dadd(6.25,-19.5,-19.5,0.5)
      pt3dadd(6.75,-17,-20.25,0.5)
      pt3dadd(5.25,-14.5,-22.25,0.5)
      pt3dadd(3,-12,-24,0.25)
      pt3dadd(2.75,-10.5,-24.5,0.5)
      pt3dadd(7.5,-2,-26.5,0.5)
      pt3dadd(8.75,0.5,-26.5,0.5)
      pt3dadd(9.5,3.25,-26.5,0.5)
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    }
    basic_shape5()
}

proc basic_shape5() {
    a5_1211 {
      pt3dclear()
      pt3dadd(40.5,-15,23.75,1.5)
      pt3dadd(40.5,-14.5,26,0.25)
      pt3dadd(42,-13.5,27,0.25)
      pt3dadd(42.5,-12.5,28.5,1.5)
      pt3dadd(45,-10,29.75,1.5)
      pt3dadd(47.75,-8.5,32.25,1)
      pt3dadd(50.5,-6,33.75,1.5)
      pt3dadd(56.75,-6,35.75,1)
      pt3dadd(62.25,-8.75,37.75,1)
      pt3dadd(65,-10.5,40,1)
      pt3dadd(66.5,-9.5,43.5,0.5)
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
    access soma
    {pt3dclear()}
    {pt3dadd(0,0,0,23.6128)}
    {pt3dadd(0,0,10.4946,23.6128)}

    // Soma as sphere: radius = 7.87093
    access soma
    connect a1_1(0),1
    connect a2_1(0),1
    connect a3_1(0),1
    connect a4_1(0),1
    connect a5_1(0),1
    connect a6_1(0),1
    {define_shape()}

    has_ais = 0



    {check_tree()}

    sl = new SectionList()
    forall sl.append

}

endtemplate stellate_remme
